PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = flanker_task_hse_psychopy
  keyboardBackend = ioHub
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Routines
  Routine Introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 2.0
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      text:
        welcome to Flanker task experiment

        the real thing is about to begin, remember this:

        1) You should press A any time you see X and C in the center of the screen

        2) You should press L any time you see B or V in the center of the screen

        for right answers a green cross will appear, and red for mistakes
        some practice might be required first

        press any key to continue
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine fixation
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine flanker_trial
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $flanker
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','l'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        from psychopy import event
        concolor = 'green'
        if key_resp_2.corr==1:
            concolor='green'
            corr_amount=corr_amount+1
        else:
            concolor='red'
    VariableComponent corr_amount
      saveEndExp = True
      saveEndRoutine = False
      startExpValue = 0
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  Routine response
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    TextComponent text_3
      color [set every repeat] = $concolor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine Outro
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        We thank you for participation!

        Don't forget your Target/Pyatorochka discount on your way out
  Routine amount_corr_answers
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    TextComponent text_5
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $corr_amount
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = The number of your successfull attempts:
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = source.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'flanker': 'XXCXX', 'corrAns': 'a'},
      {'flanker': 'CCCCC', 'corrAns': 'a'},
      {'flanker': 'CCVCC', 'corrAns': 'l'},
      {'flanker': 'XXXXX', 'corrAns': 'a'},
      {'flanker': 'XXBXX', 'corrAns': 'l'},
      {'flanker': 'BBVBB', 'corrAns': 'l'},
      {'flanker': 'BBBBB', 'corrAns': 'l'},
      {'flanker': 'CCXCC', 'corrAns': 'a'}]
    Routine fixation
    Routine flanker_trial
    Routine response
  LoopTerminator trials
  Routine amount_corr_answers
  Routine Outro
